CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(.+?)(\.[^.]*$|$)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Binary mask
    Name to assign these images:NPM1
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    Assignments count:2
    Single images count:0
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    Process as 3D?:Yes
    Relative pixel spacing in X:0.108
    Relative pixel spacing in Y:0.108
    Relative pixel spacing in Z:0.29
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:NPM1
    Name the output object:MaskObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:3

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:MaskObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:7|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
    Select objects to measure:MaskObjects
    Select neighboring objects to measure:MaskObjects
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:No
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Documents/cellprofiler_npm1_perturb_outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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